# -*- coding: utf-8 -*-
"""
Example configuration for ODMR Frequency Tracking system.

This configuration demonstrates how to set up the complete ODMR tracking
system including:
- Red Pitaya ODMR lock hardware
- Error signal streaming
- ODMR frequency tracking logic
- ODMR tracking GUI

Copy and adapt this configuration to your specific hardware setup.
"""

global:
    # Startup modules (load GUI on startup)
    startup_modules: ['odmr_tracking_gui']

    # Data directory for measurements
    default_data_dir: 'C:/Data/ODMR_Tracking/'

    # Optional: dark theme
    stylesheet: 'qdark.qss'

    # Optional: enable remote access
    # remote_modules_server:
    #     address: 'localhost'
    #     port: 12345

hardware:
    # ==========================================================================
    # Red Pitaya ODMR Lock (NEW - required for tracking)
    # ==========================================================================
    redpitaya_odmr_lock:
        module.Class: 'redpitaya.redpitaya_odmr_lock.RedPitayaOdmrLockHardware'
        options:
            # PyRPL config name for shared instance (not a file path!)
            redpitaya_config_name: 'rpy_shared_config'

            # Red Pitaya hostname/IP address
            redpitaya_hostname: '10.203.129.28'  # Replace with your Red Pitaya IP

    # ==========================================================================
    # Red Pitaya Error Signal Streaming (NEW - required for tracking)
    # ==========================================================================
    redpitaya_stream:
        module.Class: 'redpitaya.redpitaya_data_instream.RedPitayaDataInStream'
        options:
            # Same PyRPL config as odmr_lock (shared instance - CRITICAL!)
            redpitaya_config_name: 'rpy_shared_config'
            redpitaya_hostname: '10.203.129.28'  # Must match odmr_lock

            # Buffer and calibration
            channel_buffer_size: 100000
            calibration_factor: 1.0
            signal_scale: 1.0

            # Input to stream: 'demod' for error signal
            # (Future: 'ftw' for frequency tracking)
            input: 'demod'

            # Sample rate: ~30.5 kHz (125 MHz / 4096)
            # Buffer size: 4096 samples (ring buffer)

    # ==========================================================================
    # Example: Other hardware modules (adapt to your setup)
    # ==========================================================================

    # Microwave source (required for ODMR)
    # microwave_source:
    #     module.Class: 'microwave.mw_source_smiq.MicrowaveSMIQ'
    #     options:
    #         visa_address: 'GPIB0::28::INSTR'
    #         comm_timeout: 10

    # Red Pitaya IF source (for frequency modulation)
    # redpitaya_if_source:
    #     module.Class: 'microwave.redpitaya.redpitaya_if_source.RedPitayaIFSource'
    #     options:
    #         config_file: 'C:/pyrpl_user_dir/redpitaya_config.yml'
    #         device_name: 'rp-f0a235'

    # NI DAQ for counting (photon detection)
    # ni_counting:
    #     module.Class: 'ni_x_series.ni_x_series_counter.NIXSeriesCounter'
    #     options:
    #         device_name: 'Dev1'
    #         counter_channels: ['Ctr0', 'Ctr1']
    #         sources: ['/Dev1/PFI8', '/Dev1/PFI9']

logic:
    # ==========================================================================
    # ODMR Logic (existing - required for scanning)
    # ==========================================================================
    # odmr_logic:
    #     module.Class: 'odmr_logic.OdmrLogic'
    #     options:
    #         scan_frequency_step: 1e6  # 1 MHz
    #     connect:
    #         microwave: 'microwave_source'
    #         counter: 'ni_counting'

    # ==========================================================================
    # ODMR Frequency Tracking Logic (NEW)
    # ==========================================================================

    odmr_frequency_tracking_logic:
        module.Class: 'odmr_frequency_tracking_logic.OdmrFrequencyTrackingLogic'
        options:
            # Default lock bandwidth (Hz)
            default_lock_bandwidth: 300

            # Error signal buffer size (samples)
            error_buffer_size: 10000

            # Status polling interval (seconds)
            status_poll_interval: 0.1
        connect:
            # Connect to ODMR logic for scan data
            odmr_logic: 'odmr_logic'

            # Connect to Red Pitaya ODMR lock hardware
            odmr_lock_hw: 'redpitaya_odmr_lock'

            # Connect to error signal streaming
            error_streamer: 'redpitaya_stream'

gui:
    # ==========================================================================
    # ODMR Tracking GUI (NEW)
    # ==========================================================================
    odmr_tracking_gui:
        module.Class: 'odmr_tracking.odmr_tracking_gui.OdmrTrackingGui'
        options:
            # Optional: enable antialiasing for smoother plots
            use_antialias: True
        connect:
            # Connect to ODMR frequency tracking logic
            tracking_logic: 'odmr_frequency_tracking_logic'

    # ==========================================================================
    # Optional: Standard ODMR GUI (for comparison/testing)
    # ==========================================================================
    # odmr_gui:
    #     module.Class: 'odmr.odmrgui.OdmrGui'
    #     connect:
    #         odmr_logic: 'odmr_logic'

# ==============================================================================
# Usage Instructions
# ==============================================================================
#
# 1. Setup:
#    - Install PyRPL: pip install pyrpl
#    - Connect Red Pitaya to network
#    - Update device_name with your Red Pitaya hostname
#    - Configure PyRPL IQ demodulator for ODMR error signal
#    - Set up ODMR scanning hardware (MW source, counter, etc.)
#
# 2. ODMR Tracking Workflow:
#    a. Start Qudi with this config: qudi -c odmr_tracking_config_example.cfg
#    b. ODMR Tracking GUI opens automatically
#    c. Perform ODMR scan (via OdmrLogic - may need standard ODMR GUI)
#    d. In Tracking GUI:
#       - Drag fit region on ODMR plot or enter frequency range
#       - Click "Fit" to extract error signal slope
#       - Select lock mode (Integral or PI)
#       - Set bandwidth (typical: 300 Hz)
#       - Set damping (PI mode only, typical: 0.7)
#       - Click "Configure" to program hardware
#       - Click "Enable Lock" to start tracking
#    e. Monitor:
#       - Error signal time series (should stay near zero when locked)
#       - Lock status (Locked: ON, Saturated: NO)
#       - Correction frequency (tracks resonance shifts)
#    f. Click "Clear" to reset integrator if saturated
#    g. Click "Disable Lock" to stop tracking
#
# 3. Lock Tuning:
#    - Integral mode: Simple, stable, no overshoot
#      - Start with BW = 300 Hz
#      - Increase for faster response (max ~1 kHz)
#      - Decrease if oscillations observed
#
#    - PI mode: Faster response, requires tuning
#      - Start with BW = 300 Hz, ζ = 0.7 (critical damping)
#      - ζ < 0.7: faster but may overshoot
#      - ζ > 0.7: slower but more stable
#
# 4. Troubleshooting:
#    - Lock won't enable: Check PyRPL connection and IQ demodulator
#    - Lock won't acquire: Verify error signal slope sign and magnitude
#    - Lock saturates: Fit range may be wrong, or resonance drifted too far
#    - No error stream: Check redpitaya_stream configuration and scan module
#
# 5. Advanced:
#    - Future: Frequency (FTW) streaming for resonance tracking display
#    - See: ODMR_TRACKING_HANDOFF.md for implementation details
#    - See: ODMR_TRACKING_IMPLEMENTATION_PLAN.md for architecture
#
# ==============================================================================
